PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID01.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID02.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID03.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID04.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID05.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID06.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID07.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID08.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID01.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID02.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID03.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID04.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID05.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID06.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID07.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID08.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/FemaleAverage.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID01.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID02.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID03.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID04.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID05.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID06.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID07.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID08.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID01.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID02.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID03.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID04.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID05.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID06.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID07.wav', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID08.wav', 'conditions/bm_cond_file.csv', 'conditions/bt_cond_file.csv', 'conditions/vm_cond_file.csv', 'conditions/vt_cond_file.csv']
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1470, 956]
  expName = GVMT
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Glasgow Voice Memory Test

        Your task is to listen to a series of eight voices and try to remember them.
        This will be followed by another series of voices that will test your memory. For each one of those new voices, you will have to indicate if it belongs to the first series you have been trying to remember.
        This will be repeated for ringing bells.
    ButtonComponent int_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = NEXT
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        debug = False
        neverPlay = False
  Routine sound_test
    RoutineSettingsComponent sound_test
      skipIf = debug
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        st_play_once = false;
        st_soundPlaying = false;
      Begin Routine:
        st_play_once = False
        st_soundPlaying = False
      Each Frame:
        if st_play_btn.wasClicked and not st_soundPlaying:
            st_sound.play()
            st_soundPlaying = True
            st_playStart = t

        if st_soundPlaying:
            if t - st_playStart >= st_sound.getDuration():
                st_soundPlaying = False
      Each JS Frame:
        // Check for button click only if sound not already playing
        if (st_play_btn.isClicked && !st_soundPlaying) {
            st_sound.play();
            st_soundPlaying = true;
            st_playStart = t;
        }

        // Monitor playback duration
        if (st_soundPlaying) {
            if ((t - st_playStart) >= st_sound.getDuration()) {
                st_soundPlaying = false;
            }
        }
    TextComponent st_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Let's first check if your sound device works properly

        A sound will be played after you click the button below. You can replay the sound as many times as you wish

        Please adjust the volume of your device at a comfortable level.
    ButtonComponent st_play_btn
      bold = True
      callback = st_play_once = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = Test Sound
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    ButtonComponent st_cont_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [condition] = st_play_once
      text = Continue
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    SoundComponent st_sound
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/FemaleAverage.wav
      startVal [condition] = neverPlay
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  Routine voice_task
    RoutineSettingsComponent voice_task
      skipIf = debug
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    TextComponent vt_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is this Voice OLD or NEW?

        Press 'z' for OLD
        Press 'm' for NEW
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize counters
        vt_totalTrials = 0
        vt_totalCorrect = 0
      Begin Routine:
        respKey = None
        vt_respCorrect = None
      End Routine:
        # Check response from Keyboard component
        if vt_key.keys:  # participant pressed a key
            respKey = vt_key.keys[0]  # first key pressed
            if (respKey == 'z' and vt_type == 'old') or (respKey == 'm' and vt_type == 'new'):
                vt_respCorrect = 1
            else:
                vt_respCorrect = 0

        # Update counters
        vt_totalTrials += 1
        if vt_respCorrect == 1:
            vt_totalCorrect += 1
    SoundComponent vt_sound
      sound [set every repeat] = $vt_soundfile
      startVal [time (s)] = 0.1
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    KeyboardComponent vt_key
      allowedKeys = 'z', 'm'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.5
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  Routine voice_feedback
    RoutineSettingsComponent voice_feedback
      skipIf = debug
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    TextComponent vf_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        accuracy_percent = (vt_totalCorrect / vt_totalTrials) * 100

        thisExp.addData('accuracy_voices', accuracy_percent)


        vf_text.text = f"Your accuracy for the voices was {accuracy_percent:.1f}%\nAs an indication, the general population accuracy for this type of sound is 78.8 %\n\nClick 'Next' to continue"
    ButtonComponent vf_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = Next
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  Routine bells_instructions
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  Routine bells_feedback
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    TextComponent bf_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        accuracy_percent = (bt_totalCorrect / bt_totalTrials) * 100

        thisExp.addData('accuracy_bells', accuracy_percent)

        bf_text.text = f"Your accuracy for the bells was {accuracy_percent:.1f}%\nAs an indication, the general population accuracy for this type of sound is 85.6 %\n\nClick 'Next' to continue"
    ButtonComponent bf_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = Next
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  Routine finish
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    TextComponent fin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of task

        The task is over, thank you for your participation!
    ButtonComponent fin_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = Finish
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  Routine voice_memorisation
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    TextComponent vm_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        vm_text.setText(vm_text_content);

        sounds = [vm_sound_1, vm_sound_2, vm_sound_3, vm_sound_4, vm_sound_5, vm_sound_6, vm_sound_7, vm_sound_8];
        currentSoundIndex = 0;
        playCount = 0;
        isPlaying = false;
        nextPlayTime = 0;
        labelSet = false;  // flag to track whether we've updated the button text
      Begin Routine:
        vm_text.text = vm_text_content
        vm_btn.text = vm_btn_content

        if auto_proceed == 1:
            vm_text.draw()
            win.flip()
            continueRoutine = False

        if vm_playSound == 1:
            for snd in [vm_sound_1, vm_sound_2, vm_sound_3, vm_sound_4,
                        vm_sound_5, vm_sound_6, vm_sound_7, vm_sound_8]:
                for _ in range(3):
                    snd.play()
                    core.wait(snd.getDuration() + 0.1)
            continueRoutine = False
      Each JS Frame:
        if (auto_proceed === 1) {
            continueRoutine = false;
            }

        if (!labelSet) {
            vm_btn.text = vm_btn_content;   // update ButtonStim text
            vm_btn.setAutoDraw(true);        // make sure it's visible
            labelSet = true;                 // prevent re-running every frame
        }

        if (vm_playSound) {
            vm_btn.setAutoDraw(false);  // stop drawing & interaction
        } else {
            vm_btn.setAutoDraw(true);   // show & clickable
        }

        if (vm_playSound && currentSoundIndex < sounds.length) {
            let snd = sounds[currentSoundIndex];

            if (!isPlaying && t >= nextPlayTime) {
                snd.play();
                isPlaying = true;
                soundStart = t;  // mark when it started
            }

            if (isPlaying) {
                let elapsed = t - soundStart;
                if (elapsed >= snd.getDuration()) {
                    playCount += 1;
                    isPlaying = false;
                    nextPlayTime = t + 0.1;  // add buffer
                    if (currentSoundIndex === 0) {
                        if (playCount >= 4) {
                            playCount = 0;
                            currentSoundIndex += 1;
                        }
                    }
                    if (currentSoundIndex > 0) {
                        if (playCount >= 3) {
                            playCount = 0;
                            currentSoundIndex += 1;
                        }
                    }
                }
            }

            if (currentSoundIndex >= sounds.length) {
                continueRoutine = false;
            }
        }
    ButtonComponent vm_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = placeholder
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    SoundComponent vm_sound_1
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID01.wav
      startVal [condition] = neverPlay
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    SoundComponent vm_sound_2
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID02.wav
      startVal [condition] = neverPlay
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    SoundComponent vm_sound_3
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID03.wav
      startVal [condition] = neverPlay
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    SoundComponent vm_sound_4
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID04.wav
      startVal [condition] = neverPlay
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    SoundComponent vm_sound_5
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID05.wav
      startVal [condition] = neverPlay
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    SoundComponent vm_sound_6
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID06.wav
      startVal [condition] = neverPlay
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    SoundComponent vm_sound_7
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID07.wav
      startVal [condition] = neverPlay
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    SoundComponent vm_sound_8
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID08.wav
      startVal [condition] = neverPlay
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  Routine voice_task_intro
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    TextComponent vti_text
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Testing instruction

        During the testing phase, you will listen to "Voice" sounds that are either OLD (sounds that were presented during the familiarization phase) or NEW (sounds that were presented NOT during the familiarization phase).

        After the playback of a sound press:
        - Press 'z' if you think this was an OLD sound
        - Press 'm' if you think this was a NEW sound
    ButtonComponent vti_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = Next
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  Routine voice_task_load
    RoutineSettingsComponent voice_task_load
      skipIf = debug
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    TextComponent vtl_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Loading...
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  Routine bells_memorisation
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    TextComponent bm_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        bm_text.setText(bm_text_content);

        sounds = [bm_sound_1, bm_sound_2, bm_sound_3, bm_sound_4, bm_sound_5, bm_sound_6, bm_sound_7, bm_sound_8];
        currentSoundIndex = 0;
        playCount = 0;
        isPlaying = false;
        nextPlayTime = 0;
        labelSet = false;  // flag to track whether we've updated the button text
      Begin Routine:
        bm_text.text = bm_text_content
        bm_btn.text = bm_btn_content

        bm_text.text = bm_text_content
        bm_btn.text = bm_btn_content

        if bm_auto_proceed == 1:
            bm_text.draw()
            win.flip()
            continueRoutine = False

        if bm_playSound == 1:
            for snd in [bm_sound_1, bm_sound_2, bm_sound_3, bm_sound_4,
                        bm_sound_5, bm_sound_6, bm_sound_7, bm_sound_8]:
             for _ in range(3):
                    snd.play()
                    core.wait(snd.getDuration() + 0.1)
            continueRoutine = False
      Each JS Frame:
        if (bm_auto_proceed === 1) {
            continueRoutine = false;
            }

        if (!labelSet) {
            bm_btn.text = bm_btn_content;   // update ButtonStim text
            bm_btn.setAutoDraw(true);        // make sure it's visible
            labelSet = true;                 // prevent re-running every frame
        }

        if (bm_playSound) {
            bm_btn.setAutoDraw(false);  // stop drawing & interaction
        } else {
            bm_btn.setAutoDraw(true);   // show & clickable
        }

        if (bm_playSound && currentSoundIndex < sounds.length) {
            let snd = sounds[currentSoundIndex];

            if (!isPlaying && t >= nextPlayTime) {
                snd.play();
                isPlaying = true;
                soundStart = t;  // mark when it started
            }

            if (isPlaying) {
                let elapsed = t - soundStart;
                if (elapsed >= snd.getDuration()) {
                    playCount += 1;
                    isPlaying = false;
                    nextPlayTime = t + 0.1;  // add buffer
                    if (currentSoundIndex === 0) {
                        if (playCount >= 4) {
                            playCount = 0;
                            currentSoundIndex += 1;
                        }
                    }
                    if (currentSoundIndex > 0) {
                        if (playCount >= 3) {
                            playCount = 0;
                            currentSoundIndex += 1;
                        }
                    }
                }
            }

            if (currentSoundIndex >= sounds.length) {
                continueRoutine = false;
            }
        }
    ButtonComponent bm_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
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    SoundComponent bm_sound_1
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID01.wav
      startVal [condition] = neverPlay
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    SoundComponent bm_sound_2
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID02.wav
      startVal [condition] = neverPlay
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    SoundComponent bm_sound_3
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID03.wav
      startVal [condition] = neverPlay
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    SoundComponent bm_sound_4
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID04.wav
      startVal [condition] = neverPlay
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    SoundComponent bm_sound_5
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID05.wav
      startVal [condition] = neverPlay
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    SoundComponent bm_sound_6
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID06.wav
      startVal [condition] = neverPlay
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    SoundComponent bm_sound_7
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID07.wav
      startVal [condition] = neverPlay
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    SoundComponent bm_sound_8
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID08.wav
      startVal [condition] = neverPlay
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  Routine bells_task_intro
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    TextComponent bti_text
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Testing instruction

        During the testing phase, you will listen to "Bell" sounds that are either OLD (sounds that were presented during the familiarization phase) or NEW (sounds that were presented NOT during the familiarization phase).

        After the playback of a sound press:
        - Press 'z' if you think this was an OLD sound
        - Press 'm' if you think this was a NEW sound
    ButtonComponent bti_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = Next
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  Routine bells_task_load
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    TextComponent btl_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Loading...
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  Routine bells_task
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    TextComponent bt_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is this Bell OLD or NEW?

        Press 'z' for OLD
        Press 'm' for NEW
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize counters
        bt_totalTrials = 0
        bt_totalCorrect = 0
      Begin Routine:
        respKey = None
        bt_respCorrect = None
      End Routine:
        # Check response from Keyboard component
        if bt_key.keys:  # participant pressed a key
            respKey = bt_key.keys[0]  # first key pressed
            if (respKey == 'z' and bt_type == 'old') or (respKey == 'm' and bt_type == 'new'):
                bt_respCorrect = 1
            else:
                bt_respCorrect = 0

        # Update counters
        bt_totalTrials += 1
        if bt_respCorrect == 1:
            bt_totalCorrect += 1
    SoundComponent bt_sound
      sound [set every repeat] = $bt_soundfile
      startVal [time (s)] = 0.1
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    KeyboardComponent bt_key
      allowedKeys = 'z', 'm'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.5
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Flow
  Routine introduction
  Routine sound_test
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/vm_cond_file.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('vm_text_content', '"Voice" Memorization\n\nDuring the memorization phase, you will listen to "Voice" sounds.\n\nListen carefully because, during the test phase, you will be asked whether you heard those sounds or not.'), ('vm_btn_content', 'Start'), ('vm_playSound', 0), ('auto_proceed', 0)]),
      OrderedDict([('vm_text_content', 'Listen carefully to the sounds'), ('vm_btn_content', ' '), ('vm_playSound', 0), ('auto_proceed', 1)]),
      OrderedDict([('vm_text_content', 'Listen carefully to the sounds'), ('vm_btn_content', ' '), ('vm_playSound', 1), ('auto_proceed', 0)]),
      OrderedDict([('vm_text_content', "End of memorization phase!\n\nClick 'Next' to continue"), ('vm_btn_content', 'Next'), ('vm_playSound', 0), ('auto_proceed', 0)])]
    Routine voice_memorisation
  LoopTerminator trials
  Routine voice_task_intro
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions/vt_cond_file.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID04.wav'), ('vt_type', 'old')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID01.wav'), ('vt_type', 'new')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID02.wav'), ('vt_type', 'new')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID08.wav'), ('vt_type', 'old')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID05.wav'), ('vt_type', 'old')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID03.wav'), ('vt_type', 'new')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID01.wav'), ('vt_type', 'old')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID04.wav'), ('vt_type', 'new')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID05.wav'), ('vt_type', 'new')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID06.wav'), ('vt_type', 'new')])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
    Routine voice_task_load
    Routine voice_task
  LoopTerminator trials_2
  Routine voice_feedback
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = conditions/bm_cond_file.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('bm_text_content', '"Bell" Memorization\n\nDuring the memorization phase, you will listen to "Bell" sounds.\n\nListen carefully because, during the test phase, you will be asked whether you heard those sounds or not.'), ('bm_btn_content', 'Start'), ('bm_playSound', 0), ('bm_auto_proceed', 0)]),
      OrderedDict([('bm_text_content', 'Listen carefully to the sounds'), ('bm_btn_content', ' '), ('bm_playSound', 0), ('bm_auto_proceed', 1)]),
      OrderedDict([('bm_text_content', 'Listen carefully to the sounds'), ('bm_btn_content', ' '), ('bm_playSound', 1), ('bm_auto_proceed', 0)]),
      OrderedDict([('bm_text_content', "End of memorization phase!\n\nClick 'Next' to continue"), ('bm_btn_content', 'Next'), ('bm_playSound', 0), ('bm_auto_proceed', 0)])]
    Routine bells_memorisation
  LoopTerminator trials_3
  Routine bells_task_intro
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = conditions/bt_cond_file.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID01.wav'), ('bt_type', 'new')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID06.wav'), ('bt_type', 'old')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID02.wav'), ('bt_type', 'new')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID05.wav'), ('bt_type', 'old')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID03.wav'), ('bt_type', 'new')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID04.wav'), ('bt_type', 'new')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID03.wav'), ('bt_type', 'old')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID01.wav'), ('bt_type', 'old')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID08.wav'), ('bt_type', 'old')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID05.wav'), ('bt_type', 'new')])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
    Routine bells_task_load
    Routine bells_task
  LoopTerminator trials_4
  Routine bells_feedback
  Routine finish
