---
API: 2.1
OpenSesame: 3.3.9
Platform: posix
---
set width 800
set uniform_coordinates yes
set title Glasgow_Voice_Memory_Test
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 44100
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 600
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/trapeaur/Documents/GitHub/Glasgow_Voice_Memory_Test"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define form_text_display End_of_experiment
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "End of experiment"
	set form_text "The experiment is over, thank you for your participation!"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display End_of_familiarization
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "End of memorization phase!"
	set form_text "Click 'Ok' to continue"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence Fami_trial_sequence
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run sound_loop always
	run new_sound_pause always

define form_text_display Familiarization_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Start
	set margins "50;50;50;50"
	set form_title "[Voice_or_Bell] Memorization"
	__form_text__
	During the memorization phase, you will listen to [Voice_or_Bell] sounds.
	Listen carefully because, during the test phase, you will be asked whether you heard those sounds or not.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop Familiarization_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Exécuter un autre item plusieurs fois"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 ID ID01
	setcycle 0 OldNew Old
	setcycle 1 ID ID02
	setcycle 1 OldNew Old
	setcycle 2 ID ID03
	setcycle 2 OldNew Old
	setcycle 3 ID ID04
	setcycle 3 OldNew Old
	setcycle 4 ID ID05
	setcycle 4 OldNew Old
	setcycle 5 ID ID06
	setcycle 5 OldNew Old
	setcycle 6 ID ID07
	setcycle 6 OldNew Old
	setcycle 7 ID ID08
	setcycle 7 OldNew Old
	run Fami_trial_sequence

define loop Sound_test_loop
	set source table
	set repeat 1000
	set order sequential
	set description "Exécuter un autre item plusieurs fois"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[response] = 1"
	setcycle 0 empty_column ""
	run sound_test_sequence

define form_text_display Test_sound_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Test Sound"
	set margins "50;50;50;50"
	set form_title "Let's first check if your sound device works properly"
	__form_text__
	A sound will be played after you click the button below.
	Please adjust the volume of your device at a comfortable level.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop Testing_bell_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Exécuter un autre item plusieurs fois"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 ID ID01
	setcycle 0 OldNew New
	setcycle 1 ID ID06
	setcycle 1 OldNew Old
	setcycle 2 ID ID02
	setcycle 2 OldNew New
	setcycle 3 ID ID05
	setcycle 3 OldNew Old
	setcycle 4 ID ID03
	setcycle 4 OldNew New
	setcycle 5 ID ID04
	setcycle 5 OldNew New
	setcycle 6 ID ID03
	setcycle 6 OldNew Old
	setcycle 7 ID ID01
	setcycle 7 OldNew Old
	setcycle 8 ID ID08
	setcycle 8 OldNew Old
	setcycle 9 ID ID05
	setcycle 9 OldNew New
	setcycle 10 ID ID06
	setcycle 10 OldNew New
	setcycle 11 ID ID04
	setcycle 11 OldNew Old
	setcycle 12 ID ID07
	setcycle 12 OldNew New
	setcycle 13 ID ID02
	setcycle 13 OldNew Old
	setcycle 14 ID ID07
	setcycle 14 OldNew Old
	setcycle 15 ID ID08
	setcycle 15 OldNew New
	run Testing_trial_sequence

define feedback Testing_feedback
	set reset_variables yes
	set duration 0
	set description "Fournir du feedback au participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[Voice_or_Bell] testing phase is over!<br />Your accuracy was [acc] %<br />As an indication, the general population accuracy<br />for this type of sound is [population_acc] %<br />" x=0 y=0 z_index=0
	draw rect color="#818181" fill=1 h=64 penwidth=1 show_if=always w=128 x=-64 y=160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=Ok x=0 y=192 z_index=0

define form_text_display Testing_feedback_form
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "[Voice_or_Bell] testing phase is over!"
	__form_text__
	Your accuracy was [accuracy] %
	As an indication, the general population accuracy
	for this type of sound is [population_acc] %
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Testing_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Start
	set margins "50;50;50;50"
	set form_title "Testing instruction"
	__form_text__
	During the testing phase, you will listen to [Voice_or_Bell] sounds that are either OLD (sounds that were presented during the familiarization phase) or NEW (sounds that were presented NOT during the familiarization phase).
	
	After the playback of a sound click:
	- 'OLD' if you think this was an OLD sound
	- 'NEW' if you think this was an NEW sound
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence Testing_trial_sequence
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run pause always
	run listen_and_reply always
	run play_sound_Test always
	run click_loop always
	run new_logger always

define loop Testing_voice_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Exécuter un autre item plusieurs fois"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 ID ID04
	setcycle 0 OldNew Old
	setcycle 0 new_column_1 ""
	setcycle 1 ID ID01
	setcycle 1 OldNew New
	setcycle 1 new_column_1 ""
	setcycle 2 ID ID02
	setcycle 2 OldNew New
	setcycle 2 new_column_1 ""
	setcycle 3 ID ID08
	setcycle 3 OldNew Old
	setcycle 3 new_column_1 ""
	setcycle 4 ID ID05
	setcycle 4 OldNew Old
	setcycle 4 new_column_1 ""
	setcycle 5 ID ID03
	setcycle 5 OldNew New
	setcycle 5 new_column_1 ""
	setcycle 6 ID ID01
	setcycle 6 OldNew Old
	setcycle 6 new_column_1 ""
	setcycle 7 ID ID04
	setcycle 7 OldNew New
	setcycle 7 new_column_1 ""
	setcycle 8 ID ID05
	setcycle 8 OldNew New
	setcycle 8 new_column_1 ""
	setcycle 9 ID ID06
	setcycle 9 OldNew New
	setcycle 9 new_column_1 ""
	setcycle 10 ID ID06
	setcycle 10 OldNew Old
	setcycle 10 new_column_1 ""
	setcycle 11 ID ID03
	setcycle 11 OldNew Old
	setcycle 11 new_column_1 ""
	setcycle 12 ID ID07
	setcycle 12 OldNew New
	setcycle 12 new_column_1 ""
	setcycle 13 ID ID02
	setcycle 13 OldNew Old
	setcycle 13 new_column_1 ""
	setcycle 14 ID ID08
	setcycle 14 OldNew New
	setcycle 14 new_column_1 ""
	setcycle 15 ID ID07
	setcycle 15 OldNew Old
	setcycle 15 new_column_1 ""
	run Testing_trial_sequence

define sequence Voice_or_Bell_sequence
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run Familiarization_instructions always
	run Familiarization_loop "[Voice_or_Bell]=\"Bell\""
	run End_of_familiarization always
	run Testing_instructions always
	run init_script always
	run init_javascript always
	run Testing_voice_loop "[Voice_or_Bell]=\"Voice\""
	run init_script always
	run Testing_bell_loop "[Voice_or_Bell]=\"Bell\""
	run Testing_feedback always
	run next_mouse_click always

define loop Voice_or_Bells
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Exécuter un autre item plusieurs fois"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Voice_or_Bell Voice
	setcycle 0 population_acc 78.8
	setcycle 1 Voice_or_Bell Bell
	setcycle 1 population_acc 85.6
	run Voice_or_Bell_sequence

define form_text_display Welcome_GVMT
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Next
	set margins "50;50;50;50"
	set form_title "Welcome to the Glasgow Voice Memory Test"
	__form_text__
	Your task is to listen to a series of eight voices and try to remember them.
	This will be followed by another series of voices that will test your memory. For each one of those new voices, you will have to indicate if it belongs to the first series you have been trying to remember.
	This will be repeated for ringing bells.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop click_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Exécuter un autre item plusieurs fois"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run click_sequence

define repeat_cycle click_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition "[response]=1"

define sequence click_sequence
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run test_mouse_response always
	run eval_response_script always
	run eval_response_javascript always
	run click_repeat_cycle always

define inline_javascript eval_response_javascript
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	set _prepare ""

define inline_script eval_response_script
	set description "Exécute du code Python"
	___run__
	# Define resonse depending on cursor_roi
	xold = var.cursor_roi.find("OLD")
	if xold != -1:
	    var.response = "Old"
	
	xnew = var.cursor_roi.find("NEW")
	if xnew != -1:
	    var.response = "New"
	
	print(u'trial_num is: %s' % var.trial_num)
	print(u'OldNew is: %s' % var.OldNew)
	print(u'response is: %s' % var.response)
	
	if var.response != 1: # response is 1 if user did not click on one of the buttons
	    var.trial_num = var.trial_num + 1
	    var.soundfile = var.Voice_or_Bell + "_" + var.OldNew + "_" + var.ID + ".wav"
	    
	    # correct variables
	    if var.response == var.OldNew:
	        var.correct = 1
	        var.sum_correct = var.sum_correct + 1
	    else:
	        var.correct = 0
	        
	    var.acc = 100 * (var.sum_correct / var.trial_num)
	    
	    
	    print(u'correct is: %s' % var.correct)
	    print(u'accuracy is: %s' % var.acc)
	    
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run Welcome_GVMT always
	run Test_sound_instructions always
	run Sound_test_loop always
	run Voice_or_Bells always
	run End_of_experiment always

define inline_javascript init_javascript
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.trial_num = 0
	vars.sum_correct = 0
	__end__
	set _prepare ""

define inline_script init_script
	set description "Exécute du code Python"
	___run__
	var.trial_num = 0
	var.sum_correct = 0
	__end__
	set _prepare ""

define sketchpad listen
	set duration 0
	set description "Montrer des stimuli visuels"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Listen carefully to the sounds" x=0 y=0 z_index=0

define sketchpad listen_and_reply
	set duration 0
	set description "Montrer des stimuli visuels"
	draw rect color="#818181" fill=1 h=64 name=NEW penwidth=1 show_if=always w=128 x=96 y=-32 z_index=2
	draw rect color="#818181" fill=1 h=64 name=OLD penwidth=1 show_if=always w=128 x=-224 y=-32 z_index=1
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Is this sound OLD or NEW?" x=0 y=-128 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=OLD x=-160 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=18 html=yes name=NEW show_if=always text=NEW x=160 y=0 z_index=0

define inline_script new_inline_script
	set description "Exécute du code Python"
	set _run "var.response = -1"
	set _prepare ""

define inline_script new_inline_script_1
	set description "Exécute du code Python"
	set _run "var.pouet = -2"
	set _prepare ""

define logger new_logger
	set description "Enregistrer des données expérimentales"
	set auto_log no
	log Voice_or_Bell
	log trial_num
	log soundfile
	log OldNew
	log ID
	log response
	log response_time
	log correct

define repeat_cycle new_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	__condition__
	[form_response]!="Sound is ok"
	__end__

define sketchpad new_sketchpad
	set duration keypress
	set description "Montrer des stimuli visuels"

define sketchpad new_sketchpad_1
	set duration keypress
	set description "Montrer des stimuli visuels"

define sketchpad new_sound_pause
	set duration 1495
	set description "Montrer des stimuli visuels"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Listen carefully to the sounds" x=0 y=0 z_index=0

define mouse_response next_mouse_click
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Récolte des clics de souris"

define sketchpad pause
	set duration 995
	set description "Montrer des stimuli visuels"

define sampler play_sound_Fami
	set volume 1
	set stop_after 0
	set sample "[Voice_or_Bell]_[OldNew]_[ID].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Lecture d'un fichier audio au format .wav ou .ogg"

define sampler play_sound_Test
	set volume 1
	set stop_after 0
	set sample "[Voice_or_Bell]_[OldNew]_[ID].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Lecture d'un fichier audio au format .wav ou .ogg"

define loop sound_loop
	set source table
	set repeat 3
	set order random
	set description "Exécuter un autre item plusieurs fois"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run sound_sequence

define sequence sound_sequence
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run listen always
	run play_sound_Fami always

define sequence sound_test_sequence
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run test_sound always
	run soundok_form always
	run soundok_script always
	run soundok_javascript always

define form_base soundok_form
	# widget [column] [row] [column span] [row span] [widget type] [keywords]
	set timeout infinite
	set spacing 25
	set rows "1;1;1"
	set only_render no
	set margins "100;100;100;100"
	set description "A generic form plug-in"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label text="Adjust the volume of your sound device"
	widget 0 1 1 1 button text="Sound is ok"
	widget 1 1 1 1 button text="Play sound again"


define inline_javascript soundok_javascript
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	console.log('form_response = ' + vars.form_response)
	
	if (vars.form_response == "Sound is ok") {
	    vars.response = 1
	} else {
	    vars.response = 0
	}
	
	console.log('response = ' + vars.response)
	__end__
	set _prepare ""

define inline_script soundok_script
	set description "Exécute du code Python"
	___run__
	# # print(u'form_response is: %s' % var.form_response)
	# if var.form_response == "Sound is ok":
	#     var.response = 1
	# else:
	#     var.response = 0
	
	
	# # print(u'response is: %s' % var.response)
	__end__
	set _prepare ""

define mouse_response test_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad listen_and_reply
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Récolte des clics de souris"
	set allowed_responses 1

define sampler test_sound
	set volume 1
	set stop_after 0
	set sample "FemaleAverage.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Lecture d'un fichier audio au format .wav ou .ogg"

